PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1728, 1117]
  expName = trigger_example
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    ImageComponent image_component
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3.0
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    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    SoundComponent sound_1
      forceEndRoutine = False
      sound [set every repeat] = A
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.5
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        from digital_trigger import Trigger

        port = Trigger(names=['nature', 'urban', 'sound'], simulate=True)

        # or digital_trigger.Trigger( works.

        # Checking any import issues on a mac:
        #import sys
        #print(sys.executable)
        #for p in sys.path:
        #    print("  ", p)

        # If you see:
        #   /Applications/PsychoPy.app/Contents/Resources/lib/python3.1/site-packages.zip
        #   /Applications/PsychoPy.app/Contents/Resources/lib/python3.1/site-packages

        # python3.1 should probably be python3.10 and the 0 is getting truncated
        # It's a psychopy bug, see install notes for fix, PR submitted
      Begin Routine:
        print('CONDITION: ' + condition)
      Each Frame:
        port.sync_to_component(condition, image_component, win)
        port.sync_to_component('sound', sound_1, win)
      End Experiment:
        port.stop()
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('condition', 'nature'), ('image', 'stimuli/nature/N_01.jpg')]),
      OrderedDict([('condition', 'nature'), ('image', 'stimuli/nature/N_02.jpg')]),
      OrderedDict([('condition', 'nature'), ('image', 'stimuli/nature/N_03.jpg')]),
      OrderedDict([('condition', 'urban'), ('image', 'stimuli/urban/U_01.jpg')]),
      OrderedDict([('condition', 'urban'), ('image', 'stimuli/urban/U_02.jpg')]),
      OrderedDict([('condition', 'urban'), ('image', 'stimuli/urban/U_03.jpg')])]
    Routine trial
  LoopTerminator trials
